WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice)
-> GroupWorkflow RigSetup
    GroupWorkflow ReadRigConfig
      Description: Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.
      Workflow
        OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
        -> AsyncSubject RigConfigDirectory
        -> IncludeWorkflow(Path=OpenRigs.Core:ReadRigConfig.bonsai, FileName=rig.yml)
        -> WorkflowOutput
    -> UclOpenAvDome.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDome.UclOpenAvDomeRig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs => #3
    -> MemberSelector(Selector=BehaviorBoard)
    -> UclOpenAvDome.RigDevice(Name=BehaviorBoard-Main)
    -> AsyncSubject BehaviorBoard-Main
    #3 -> MemberSelector(Selector=TimestampGeneratorGen3)
    -> UclOpenAvDome.RigDevice(Name=TimestampGeneratorGen3-Main)
    -> AsyncSubject TimestampGeneratorGen3-Main
    #3 -> MemberSelector(Selector=LickSpoutStage)
    -> UclOpenAvDome.RigDevice(Name=LickSpoutStage-Main)
    -> AsyncSubject LickSpoutStage-Main
    #3 -> MemberSelector(Selector=LicketySplit) => #13
    -> UclOpenAvDome.RigDevice(Name=LicketySplit-Left)
    -> AsyncSubject LicketySplit-Left
    #13 -> UclOpenAvDome.RigDevice(Name=LicketySplit-Right)
    -> AsyncSubject LicketySplit-Right
    #3 -> MemberSelector(Selector=Camera) => #18
    -> UclOpenAvDome.RigDevice(Name=Camera-Face)
    -> AsyncSubject Camera-Face
    #18 -> UclOpenAvDome.RigDevice(Name=Camera-Pupil)
    -> AsyncSubject Camera-Pupil
    #18 -> UclOpenAvDome.RigDevice(Name=Camera-Body)
    -> AsyncSubject Camera-Body

    GroupWorkflow HardwareDevices
        SubscribeSubject TimestampGeneratorGen3-Main
        -> PropertyMapping(PortName(Selector=Settings.PortName), TimerFrequency(Selector=Settings.TimerFrequency))
        -> IncludeWorkflow
          Path=OpenRigs.Devices:TimestampGeneratorGen3.bonsai
          CommandsSubjectName=TimestampGeneratorCommands
          PortName=COM16
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=ClockSynchronizerEvents
          TimerFrequency=Timer1000Hz

        SubscribeSubject BehaviorBoard-Main
        -> PropertyMapping => #4
          PortName(Selector=Settings.PortName)
          CountsPerRev(Selector=Settings.RunningWheel.CountsPerRev)
          WheelDiameterMm(Selector=Settings.RunningWheel.WheelDiameterMm)
          EnableTrigger0(Selector=Settings.CameraTriggerController.Trigger0Enabled)
          EnableTrigger1(Selector=Settings.CameraTriggerController.Trigger1Enabled)
          Trigger0Frequency(Selector=Settings.CameraTriggerController.Trigger0Frequency)
          Trigger1Frequency(Selector=Settings.CameraTriggerController.Trigger1Frequency)
          OutputPulseEnable(Selector=Settings.PulseController.OutputPulseEnable)
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO3)
        -> UclOpenAvDome.MatchPulseOutput(Type=TypeMapping<UclOpenAvDome.FixedPulse>)
        -> PropertyMapping(PulseDO3(Selector=PulseWidthMs)) => #13
        #4, #13 -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorCommands
              PortName=COM11
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorEvents

            ExternalizedMapping(CountsPerRev, WheelDiameterMm)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.RunningWheel.bonsai
              CommandsSubjectName=BehaviorCommands
              EventsSubjectName=BehaviorEvents
              CountsPerRev=4096
              WheelDiameterMm=170
              WheelDistanceSubjectName=WheelDistanceCm

            ExternalizedMapping(PulseDO1, PulseDO2, PulseDO3, OutputPulseEnable)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorCommands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=40
              PulseDO2=50
              PulseDO3=3000
              BehaviorEventsSubjectName=BehaviorEvents
              TriggerPulseSubjectName=TriggerPulse
              TriggerCalibratedPulseSubjectName=TriggerCalibratedPulse

            BehaviorSubject<System.Tuple(System.Int32,System.Double)> DeliverRewardCommand
            -> IncludeWorkflow(Path=Extensions\DeliverReward.bonsai)

            ExternalizedMapping(EnableTrigger0, EnableTrigger1, Trigger0Frequency, Trigger1Frequency)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.CameraTriggerController.bonsai
              EnableTrigger0=true
              EnableTrigger1=false
              Trigger0Frequency=50
              Trigger1Frequency=50
              BehaviorCommandsSubjectName=BehaviorCommands
              BehaviorEventsSubjectName=BehaviorEvents
              Camera0TriggerEventsSubjectName=Camera0TriggerEvents
              Camera1TriggerEventsSubjectName=Camera1TriggerEvents

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT2S)
            -> MulticastSubject StartCameras

        GroupWorkflow LicketySplits
            SubscribeSubject LicketySplit-Right
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LickCommandsRight
              PortName=COM13
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LickEventsRight
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateRight

            SubscribeSubject LicketySplit-Left
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LickCommandsLeft
              PortName=COM15
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LickEventsLeft
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateLeft

        GroupWorkflow Cameras
            SubscribeSubject Camera-Face
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366326
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=FrameEvents1

            SubscribeSubject Camera-Body
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366318
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=FrameEvents3

            SubscribeSubject Camera-Pupil
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366328
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=FrameEvents2

        GroupWorkflow StepperDriver
            SubscribeSubject LickSpoutStage-Main
            -> PropertyMapping(StepperDriver1PortName(Selector=Settings.DriverA.PortName), StepperDriver2PortName(Selector=Settings.DriverB.PortName))
            -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_LeftIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_RightIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPositionCommand

                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                IntProperty(Value=0) => #7
                IntProperty(Value=0) => #8
                IntProperty(Value=0) => #9
                #5, #6, #7, #8, #9 -> Zip => #10
                -> BehaviorSubject StepperPosition_HOME
                #10 -> Disable Delay(DueTime=PT2.5S) => #12
                Disable Annotation "Init by Moving to ZERO"(Text="Init by Moving to ZERO") => #13
                #12, #13 -> Disable BehaviorSubject StepperPositionCommand

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> Defer "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    Disable IntProperty(Value=100) => #18
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #20
                    #18 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #22
                    #18 -> Disable PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #24
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> Defer "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    Disable IntProperty(Value=100) => #15
                    -> Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #17
                    #15 -> Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #19
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip
                -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
                -> BooleanProperty(Value=true)
                -> MulticastSubject SteppersZEROed
                -> SelectMany SendSpoutInCommand
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                -> WorkflowOutput

            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai) => #8
            SubscribeSubject SteppersZEROed
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #10 -> SubscribeWhen

        GroupWorkflow Zapit
          Description: Connects to the Zapit optogenetics server only when the task YAML enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies.
          Workflow
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Optogenetics.Enabled)
            -> Take(Count=1)
            -> Condition OptogeneticsEnabled?
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany ConnectZapit
                WorkflowInput Source1

                SubscribeSubject RigConfigs
                -> PropertyMapping(Host(Selector=Zapit.Host), Port(Selector=Zapit.Port))
                -> IncludeWorkflow(Path=Extensions\Zapit.bonsai, Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
                -> WorkflowOutput

                Disable SubscribeSubject ZapitReplies => #5
                Disable SubscribeSubject RigConfigs => #6
                #5, #6 -> Disable WithLatestFrom
                -> Disable Condition ArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.")
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: Item1.CommandCode == 1 && !Item1.IsError && Item2.Zapit.HardwareTriggered
                    -> WorkflowOutput
                -> Disable MemberSelector(Selector=Item2.Zapit.TriggerLine)
                -> Disable MulticastSubject TriggerPulse

    SubscribeSubject RigConfigs
    -> PropertyMapping(FileName(Selector=ProjectionCalibration.MeshMapPath), GammaLut(Selector=ProjectionCalibration.GammaLutPath)) => #27
    ExternalizedMapping(DisplayDevice) => #28
    #27, #28 -> GroupWorkflow BonvisionResources
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv) => #8
        ExternalizedMapping(GammaLut) => #9
        #8, #9 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)

    GroupWorkflow RewardCounter
        SubscribeSubject RewardDelivered
        -> MemberSelector(Selector=DeliveredUl)
        -> SelectMany IncrementWaterDelivered(Description="Adds each reward's delivered volume (nominal 2 ul per pulse on a fixed line) to WaterDelivered.")
            WorkflowInput Source1 => #0
            SubscribeSubject WaterDelivered => #1
            #1, #0 -> Zip
            -> Add
            -> Take(Count=1)
            -> WorkflowOutput
        -> MulticastSubject WaterDelivered

    Disable GroupWorkflow LEDs
        SubscribeSubject StartAuditoryStimulus
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject TrialSuccess
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject BehaviorEvents
        -> Take(Count=1)
        -> Delay(DueTime=PT5S)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO3))
        -> MulticastSubject BehaviorCommands

    GroupWorkflow Audio
        GroupWorkflow LoadAudioFiles
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.AudioStimulus.StimulusPath)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\filtered_pink_pulse_train.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformPinkNoise

            SubscribeSubject waveformPinkNoise
            -> MemberSelector(Selector=Cols)
            -> PropertyMapping(BufferLength)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=72000, Frequency=0, Waveform=Square, SampleRate=48000, Amplitude=0, Offset=1, Phase=0)
            -> Take(Count=1)
            -> AsyncSubject PinkNoiseSync

            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Path)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=LocalFiles\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Rescale(Min=-32768, Max=32768, RangeMin=-1, RangeMax=1, RescaleType=Linear)
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=0.5, Shift=0)
            -> AsyncSubject waveformErrorSound

        ExternalizedMapping(X-Speaker1, Y-Speaker1, Z-Speaker1, X-Speaker2, Y-Speaker2, Z-Speaker2, X-Speaker3, Y-Speaker3, Z-Speaker3)
        -> GroupWorkflow SpeakerLocations
            ExternalizedMapping(X(DisplayName=X-Speaker1), Y(DisplayName=Y-Speaker1), Z(DisplayName=Z-Speaker1))
            -> Bonsai.Shaders.CreateVector3(X=-90, Y=15, Z=0)
            -> Take(Count=1) => #2
            ExternalizedMapping(X(DisplayName=X-Speaker2), Y(DisplayName=Y-Speaker2), Z(DisplayName=Z-Speaker2))
            -> Bonsai.Shaders.CreateVector3(X=90, Y=15, Z=0)
            -> Take(Count=1) => #5
            ExternalizedMapping(X(DisplayName=X-Speaker3), Y(DisplayName=Y-Speaker3), Z(DisplayName=Z-Speaker3))
            -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0)
            -> Take(Count=1) => #8
            #2, #5, #8 -> Concat
            -> ToArray
            -> AsyncSubject SpeakerLocations

        GroupWorkflow Mixer
            GroupWorkflow MixerDevice => #0
                Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
                -> Bonsai.Mixer.StartMixer
                -> BehaviorSubject Mixer

                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerStimSource

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerStimSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBuffer => #7
                SubscribeSubject MixerStimSource => #8
                #7, #8 -> Bonsai.Mixer.AppendBuffer

                SubscribeSubject Mixer
                -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1)
                -> MulticastSubject MixerErrorSoundSource

                BehaviorSubject<Bonsai.Mixer.MixerSourceContext> MixerErrorSoundSource

                BehaviorSubject<OpenCV.Net.Mat> MixerBufferErrorSound => #14
                SubscribeSubject MixerErrorSoundSource => #15
                #14, #15 -> Bonsai.Mixer.AppendBuffer
            Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #1
            #0, #1 -> DelaySubscription(DueTime=PT3S)
            -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=ChannelCount))
        -> IntProperty(Value=32)
        -> BehaviorSubject ChannelCount

        Annotation "31 is recording channel and 30 in NC. Just as place holder until set by trial"(Text="31 is recording channel and 30 in NC. Just as place holder until set by trial")
        -> IntProperty(Value=0)
        -> BehaviorSubject ActiveSoundChannels

        BehaviorSubject<System.Boolean> StartAuditoryStimulus
        -> SelectMany PlayStim
            SubscribeSubject waveformPinkNoise
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject ActiveSoundChannels
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #8
            #4, #8 -> ChannelActivation(Channels(int=2), Gain(double=1)) => #9
            SubscribeSubject PinkNoiseSync
            -> Broadcast(ChannelCount=32)
            -> ChannelActivation(Channels(int=31), Gain(double=0.2)) => #12
            #9, #12 -> Zip
            -> Add
            -> MulticastSubject MixerBuffer

        BehaviorSubject<System.Boolean> StartAuditoryErrorSound
        -> Condition ErrorSoundEnabled?
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany PlayErrorSound
            SubscribeSubject waveformErrorSound
            -> Take(Count=1) => #1
            SubscribeSubject ChannelCount
            -> PropertyMapping(ChannelCount) => #3
            #1, #3 -> Broadcast(ChannelCount=32) => #4
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Channel)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Channels) => #9
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Gain)
            -> Take(Count=1)
            -> ToArray
            -> PropertyMapping(Gain) => #14
            #4, #9, #14 -> ChannelActivation(Channels(int=2), Gain(double=1))
            -> MulticastSubject MixerBufferErrorSound

    GroupWorkflow RewardLines
      Description: Builds the left (DO1) and right (DO2) reward lines from the rig configuration: a calibrated line reads and fits its valve calibration from the rig configuration directory, a fixed line keeps its width. The Logging group snapshots each calibration read into the session folder.
      Workflow
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO1) => #1
        SubscribeSubject RigConfigDirectory => #2
        #1, #2 -> Zip
        -> LoadRewardLine(Line=1)
        -> Take(Count=1)
        -> AsyncSubject RewardLineLeft

        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO2) => #8
        SubscribeSubject RigConfigDirectory => #9
        #8, #9 -> Zip
        -> LoadRewardLine(Line=2)
        -> Take(Count=1)
        -> AsyncSubject RewardLineRight

GroupWorkflow Declarations
    BehaviorSubject<System.Tuple(System.Int32,System.Single)> PerformanceTracking
    BehaviorSubject<System.String> TrialSuccess

    IntProperty(Value=0)
    -> BehaviorSubject TrialCount

    DoubleProperty(Value=0)
    -> BehaviorSubject WaterDelivered

    BehaviorSubject<System.Boolean> SteppersZEROed
    BehaviorSubject<System.Int32> DecisionVariable
    BehaviorSubject<System.Double> visualAzimuthStart
    BehaviorSubject<System.Double> visualAzimuth
    BehaviorSubject<ZapitCommand> ZapitCommands
    BehaviorSubject<ZapitReply> ZapitReplies

GroupWorkflow InitialiseTrials
    Annotation "Read task configuration"
      Text: Load the task parameters from the committed task YAML, validated against the generated task schema. The loaded config is snapshotted to the session folder as TaskSchema.json.
    -> Bonsai.IO.ReadAllText(Path=..\config\task.yml)
    -> UclOpenAvDomeTask.DeserializeFromYaml(Type=TypeMapping<UclOpenAvDomeTask.UclOpenAvDomeTaskLogic>)
    -> AsyncSubject TaskConfig
    -> MemberSelector(Selector=TaskParameters.Optogenetics.StimProbability)

    Annotation "Initialized first trial"(Text="Initialized first trial")
    -> SubscribeSubject TaskConfig => #6
    Disable SubscribeSubject TrialCount
    -> Disable PropertyMapping(TrialNumber) => #8
    #6, #8 -> InitialiseTrial(trainingStageId=1, TrialType=-1, WasCorrect=true, WasTimeout=false, SeedOffset=0, TrialNumber=0)
    -> BehaviorSubject thisTrialData

GroupWorkflow GUI
    Timer(DueTime=PT0S, Period=PT1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it).ToString()
    -> BehaviorSubject sessionTime => #2
    SubscribeSubject StartSession
    -> Skip(Count=1) => #4
    #2, #4 -> SubscribeWhen

    Annotation "Need the init for Spouts"(Text="Need the init for Spouts")
    -> BooleanProperty(Value=false)
    -> BehaviorSubject StartSession

    BooleanProperty(Value=false) => #9
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=true) => #11
    #9, #11 -> Merge
    -> Delay(DueTime=PT2S)
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder StartExperiment(Enabled=true, Visible=true, Text=Start) => #15
    -> BooleanProperty(Value=true)
    -> MulticastSubject StartSession
    Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text="Set Mouse ID") => #18
    -> BooleanProperty(Value=true)
    -> Condition "True? Pressed"
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1)
    -> AsyncSubject MouseIDSet
    BooleanProperty(Value=true) => #23
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=false) => #25
    #23, #25 -> Merge
    -> PropertyMapping(Enabled) => #27
    -> Bonsai.Gui.ComboBoxBuilder "Mouse ID"(Enabled=false, Visible=true, Items(string=Dummy, string=GN011, string=GN012, string=GN013, string=GN014, string=GN015), SelectedItem=GN014)
    -> BehaviorSubject MouseID
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Mouse ID"(Enabled=true, Visible=true, Text="Mouse ID")
    -> VisualizerMapping => #32
    #27 -> Bonsai.Gui.ComboBoxBuilder Training(Enabled=false, Visible=true, Items(string="Stage 0", string="Stage 1", string="Stage 2", string="Stage 3", string="Stage 4"), SelectedItem="Stage 4")
    -> BehaviorSubject trainingStageStr
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Training Stage"(Enabled=true, Visible=true, Text="Training Stage")
    -> VisualizerMapping => #37
    #18 -> VisualizerMapping => #38
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #40
    SubscribeSubject sessionTime
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=00:37:01)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Session Time"(Enabled=true, Visible=true, Text="Session Time")
    -> VisualizerMapping => #46
    SubscribeSubject TrialCount
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=345)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Trial Count"(Enabled=true, Visible=true, Text="Trial Count")
    -> VisualizerMapping => #53
    SubscribeSubject thisTrialData => #54
    -> MemberSelector(Selector=targetSide)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Target Side"(Enabled=true, Visible=true, Text="Target Side")
    -> VisualizerMapping => #60
    #54 -> MemberSelector(Selector=autoReward)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Auto Reward"(Enabled=true, Visible=true, Text="Auto Reward")
    -> VisualizerMapping => #67
    #54 -> MemberSelector(Selector=trialType)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder TrialType(Enabled=true, Visible=true, Text=TrialType)
    -> VisualizerMapping => #74
    #54 -> MemberSelector(Selector=visualAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Visual Location"(Enabled=true, Visible=true, Text="Visual Location")
    -> VisualizerMapping => #81
    #54 -> MemberSelector(Selector=audioAzimuth)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=0)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Auditory Location"(Enabled=true, Visible=true, Text="Auditory Location")
    -> VisualizerMapping => #88
    #54 -> MemberSelector(Selector=RewardSizeInUl)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=3)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Reward Size"(Enabled=true, Visible=true, Text="Reward Size")
    -> VisualizerMapping => #95
    SubscribeSubject WaterDelivered
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=471)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Water Delivered in ul"(Enabled=true, Visible=true, Text="Water Delivered in ul")
    -> VisualizerMapping => #102
    SubscribeSubject PerformanceTracker => #103
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #104
      Expression: Item1 + Item2
    -> Condition 0?
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> DoubleProperty(Value=0) => #106
    #104 -> Condition "not 0?" => #107
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=0))
        -> BitwiseNot
        -> WorkflowOutput
    #103, #107 -> Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #109
      Expression: 100 * Double(Item1) / Double(Item1 + Item2)
    #106, #109 -> Merge
    -> Format(Format={0:F2}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=48.83)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder "Performance (%)"(Enabled=true, Visible=true, Text="Performance (%)")
    -> VisualizerMapping => #116
    #32, #37, #38, #40, #46, #53, #60, #67, #74, #81, #88, #95, #102, #116 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=8
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #120
    #15 -> VisualizerMapping => #121
    SubscribeSubject FrameEvents1
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #127
    SubscribeSubject FrameEvents2
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #133
    SubscribeSubject FrameEvents3
    -> Skip(Count=1)
    -> SampleInterval(Interval=PT0.04S)
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #139
    #127, #133, #139 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #143
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateLeft
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping => #149
    Annotation "Display Detected Licks"(Text="Display Detected Licks")
    -> SubscribeSubject LickStateRight
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text=False)
    -> VisualizerMapping => #155
    #149, #155 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Lick indicators")
    -> VisualizerMapping => #159
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #161
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #163
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #167
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="3600,11100,13200,12000,10800;")
    -> VisualizerMapping => #172
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #175
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #179
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #181
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #184
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #187
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #190
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #192
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #195
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #198
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #200
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #203
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #205
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #208
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #210
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text=ZERO)
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #213
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #216
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #219
    SubscribeSubject StepperStepSize
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=150, Multiline=false) => #224
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #227
    Bonsai.Gui.ButtonBuilder SaveSpoutPositions(Enabled=true, Visible=true, Text=SaveSpoutPositions)
    -> PublishSubject SaveSpoutPositions
    -> VisualizerMapping => #230
    #161, #163, #167, #172, #175, #179, #181, #184, #187, #190, #192, #195, #198, #200, #203, #205, #208, #210, #213, #216, #219, #227, #230 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=1)
        CellSpan(ColumnSpan=5, RowSpan=1)
    -> VisualizerMapping => #232
    BooleanProperty(Value=false) => #233
    SubscribeSubject MouseIDSet => #234
    SubscribeSubject SteppersZEROed => #235
    #234, #235 -> CombineLatest
    -> BitwiseAnd => #237
    #233, #237 -> Merge
    -> PropertyMapping(Enabled) => #239
    #232, #239 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #241
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #244
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #247
    #244, #247 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #249
    BooleanProperty(Value=false) => #250
    SubscribeSubject MouseIDSet
    -> BooleanProperty(Value=true) => #252
    #250, #252 -> Merge
    -> PropertyMapping(Enabled) => #254
    #249, #254 -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Flush Valves")
    -> VisualizerMapping => #256
    SubscribeSubject WheelDistanceCm
    -> SampleInterval(Interval=PT0.5S) => #258
    -> Skip(Count=1) => #259
    #259, #258 -> Zip
    -> Subtract
    -> Multiply(Operand=DoubleProperty(Value=1))
    -> VisualizerMapping => #263
    SubscribeSubject thisTrialData => #264
    Annotation "Y define which sideto indicate for"(Text="Y define which sideto indicate for") => #265
    #264, #265 -> MemberSelector(Selector=targetSide) => #266
    -> Condition Left?
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Left))
        -> WorkflowOutput
    -> FloatProperty(Value=0.2) => #268
    #266 -> Condition "Not Left?"
        WorkflowInput Source1
        -> Equal(Operand=StringProperty(Value=Left))
        -> BitwiseNot
        -> WorkflowOutput
    -> FloatProperty(Value=0.8) => #270
    #268, #270 -> Merge => #271
    SubscribeSubject ResponseData => #272
    #264 -> MemberSelector(Selector=BothSpouts) => #273
    #272, #273 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #275
      Expression: new(Item1.CorrectResponse as CorrectResponse, Item1.TrialCnt as TrialCnt, Item2 as BothSpouts)
    Annotation "X trialCnt"(Text="X trialCnt") => #276
    #275, #276 -> MemberSelector(Selector=TrialCnt) => #277
    #271, #277 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #279
      Expression: new (Item2 as X, Item1 as Y)
    Annotation "Color to plot?"(Text="Color to plot?") => #280
    #275, #280 -> MemberSelector(Selector="CorrectResponse,BothSpouts") => #281
    -> Condition Correct? => #282
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Correct)) => #2
        #0 -> MemberSelector(Selector=Item2) => #3
        #2, #3 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    #279, #282 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Correct, Color=Lime))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #285
    #281 -> Condition Incorrect? => #286
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=Incorrect)) => #2
        #0 -> MemberSelector(Selector=Item2) => #3
        #2, #3 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    #279, #286 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Incorrect, Color=Red))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #289
    #281 -> Condition NoResponse? => #290
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=NoResponse))
        -> WorkflowOutput
    #279, #290 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=NoResponse, Color=Blue))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #293
    #281 -> Condition AutoRewarded? => #294
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=AutoRewarded)) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> BitwiseNot => #4
        #0 -> MemberSelector(Selector=Item1)
        -> Equal(Operand=StringProperty(Value=NoResponse))
        -> BitwiseNot => #7
        #4, #7 -> Zip
        -> BitwiseAnd => #9
        #2, #9 -> Zip
        -> BitwiseOr
        -> WorkflowOutput
    #279, #294 -> Sample
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      IndexSelector=""
      ValueSelector=""
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=AutoRewarded, Color=Gray))
      Capacity=nil
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping => #297
    #285, #289, #293, #297 -> Bonsai.Gui.ZedGraph.GraphPanelBuilder "Response History"(ReverseX=false, ReverseY=false, Span=nil, Capacity=60, XMin=nil, XMax=nil, YMin=-0.2, YMax=1.2)
    -> VisualizerMapping => #299
    #263, #299 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Performance)
    -> VisualizerMapping => #303
    #120, #121, #143, #159, #241, #256, #303 -> Bonsai.Gui.TableLayoutPanelBuilder "AV Dome"
      Enabled=true
      Visible=true
      ColumnCount=4
      RowCount=8
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=8)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=3)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=2, RowSpan=3)
    #224 -> SelectMany SetSubjectValue
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> MulticastSubject StepperStepSize => #2
        #0, #2 -> Sample
        -> WorkflowOutput

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    Defer RunningPerformanceBuffer
        SubscribeSubject TrialSuccess
        -> Condition NotNoResponse
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Equal(Operand=StringProperty(Value=Correct))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Convert.ToSingle(it)
        Annotation PerformanceSlidingWindow(Text="Consider replacing this with an input parameter from schema / yml")
        -> IntProperty(Value=10) => #5
        #3, #5 -> WithLatestFrom
        -> GroupWorkflow GetAverage
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1) => #1
            #0 -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #3
            #1, #3 -> BufferCount(Count=10, Skip=1) => #4
            -> Add => #5
            #4 -> MemberSelector(Selector=Count) => #6
            #5, #6 -> Zip
            -> Divide
            -> WorkflowOutput
        -> WorkflowOutput
    -> PublishSubject RunningPerformance

    SubscribeSubject ResponseData => #310
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #312
    #310, #312 -> WithLatestFrom
    -> SelectMany
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: new(Item1.CorrectResponse as CorrectResponse, Item1.Response as ResponseType, Item1.TrialCnt as TrialCnt, Item2 as BothSpouts)
        -> Condition Correct? => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        SubscribeSubject PerformanceTracker => #3
        #2, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> MemberSelector(Selector=Item1)
        -> Add(Operand=IntProperty(Value=1)) => #7
        #5 -> MemberSelector(Selector=Item2) => #8
        #7, #8 -> Zip => #9
        #1 -> Condition Incorrect? => #10
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        #10, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #12
        -> MemberSelector(Selector=Item1) => #13
        #12 -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1)) => #15
        #13, #15 -> Zip => #16
        #1 -> Condition Neither? => #17
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Correct)) => #2
            #0 -> MemberSelector(Selector=BothSpouts) => #3
            #2, #3 -> Zip
            -> BitwiseAnd => #5
            #0 -> MemberSelector(Selector=CorrectResponse)
            -> Equal(Operand=StringProperty(Value=Incorrect)) => #7
            #0 -> MemberSelector(Selector=BothSpouts) => #8
            #7, #8 -> Zip
            -> BitwiseAnd => #10
            #5, #10 -> Zip
            -> BitwiseOr
            -> BitwiseNot
            -> WorkflowOutput
        #17, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        #9, #16, #19 -> Amb
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject PerformanceTracker

    IntProperty(Value=0) => #316
    IntProperty(Value=0) => #317
    #316, #317 -> Zip
    -> BehaviorSubject PerformanceTracker

GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=RewardSizeInUl) => #6
        #4, #6 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")
        -> GroupWorkflow "Position Update"(Description="Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn

            SubscribeSubject StepperPosition_BothIn => #14
            Annotation "Sends command with every update"(Text="Sends command with every update") => #15
            #14, #15 -> SelectMany "Send command when session not running" => #16
                WorkflowInput Source1 => #0
                SubscribeSubject StartSession => #1
                #0, #1 -> WithLatestFrom => #2
                -> Condition "Send Command?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject StepperPositionCommand => #5
                #2 -> Condition "Don't send?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #7
                #5, #7 -> Merge => #8
                #2, #8 -> Sample
                -> WorkflowOutput
            GroupWorkflow "Init Positions"(Description="Init Positions") => #17
                Disable Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> Disable IntProperty(Value=3550)
                -> Disable BehaviorSubject Motor1_Position => #2
                Disable Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> Disable IntProperty(Value=5500)
                -> Disable BehaviorSubject Motor2_Position => #5
                Disable Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> Disable IntProperty(Value=4700)
                -> Disable BehaviorSubject Motor3_Position => #8
                Disable Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> Disable IntProperty(Value=2150)
                -> Disable BehaviorSubject Motor4_Position => #11
                Disable Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> Disable IntProperty(Value=950)
                -> Disable BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Disable Merge
                -> Disable WorkflowOutput

                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=LickSpoutDefaultPosition) => #18
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #19
                #18, #19 -> MemberSelector(Selector=LeftElevation)
                -> BehaviorSubject Motor1_Position => #21
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #22
                #18, #22 -> MemberSelector(Selector=RightElevation)
                -> BehaviorSubject Motor2_Position => #24
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #25
                #18, #25 -> MemberSelector(Selector=RightRadial)
                -> BehaviorSubject Motor3_Position => #27
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #28
                #18, #28 -> MemberSelector(Selector=LeftRadial)
                -> BehaviorSubject Motor4_Position => #30
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #31
                #18, #31 -> MemberSelector(Selector=BaseTransverse)
                -> BehaviorSubject Motor5_Position => #33
                #21, #24, #27, #30, #33 -> Merge
                -> WorkflowOutput
            #16, #17 -> SubscribeWhen => #18
            SubscribeSubject SteppersZEROed => #19
            #18, #19 -> SubscribeWhen

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #22
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #25
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #28
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #31
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #34
            #22, #25, #28, #31, #34 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #38
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #40
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #43
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #45
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #48
            #38, #40, #43, #45, #48 -> CombineLatest
            -> MulticastSubject StepperPosition_LeftIN

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #52
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #55
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #57
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #60
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #62
            #52, #55, #57, #60, #62 -> CombineLatest
            -> MulticastSubject StepperPosition_RightIN

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")
        -> GroupWorkflow PositionButtonCallbacks(Description="PositionButtonCallbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")
        -> SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    Annotation "RigConfig Folder"(Text="RigConfig Folder")
    -> StringProperty(Value=C:\RigConfigs\LickSpoutPositions\) => #3
    SubscribeSubject MouseIDSet => #4
    SubscribeSubject MouseID => #5
    #4, #5 -> WithLatestFrom => #6
    Annotation "Ones MouseID is confirmed, set FileName"(Text="Ones MouseID is confirmed, set FileName") => #7
    #6, #7 -> MemberSelector(Selector=Item2)
    -> Take(Count=1) => #9
    #3, #9 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1+it.Item2+".csv"
    -> Take(Count=1)
    -> BehaviorSubject SpoutPositionFileName

    SubscribeSubject SpoutPositionFileName
    -> PropertyMapping(FileName) => #15
    SubscribeSubject SaveSpoutPositions => #16
    SubscribeSubject SpoutPositionFileName => #17
    #16, #17 -> SubscribeWhen => #18
    Disable Annotation "Should be GUI button to save"(Text="Should be GUI button to save")
    -> Disable Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=true) => #20
    #15, #18, #20 -> SelectMany WritePositions
        WorkflowInput Source1

        SubscribeSubject Motor1_Position => #1
        SubscribeSubject Motor2_Position => #2
        SubscribeSubject Motor3_Position => #3
        SubscribeSubject Motor4_Position => #4
        SubscribeSubject Motor5_Position => #5
        #1, #2, #3, #4, #5 -> Zip
        -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #7
        ExternalizedMapping(FileName) => #8
        #7, #8 -> Bonsai.IO.CsvWriter
          FileName=C:\RigConfigs\LickSpoutPositions\GN014.csv
          Delimiter=","
          ListSeparator=;
          Append=false
          Overwrite=true
          Suffix=None
          IncludeHeader=false
          Selector=it
        -> Take(Count=1)
        -> WorkflowOutput

    SubscribeSubject SpoutPositionFileName
    -> SelectMany ReadPositions
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject _fName

        SubscribeSubject _fName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject _fName
        -> FileExists => #6
        -> Condition True? => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #7 -> SelectMany LoadSpoutPositions
            WorkflowInput Source1

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=C:\RigConfigs\LickSpoutPositions\GN014.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #2
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Motor1_Position => #4
            #2 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Motor2_Position => #6
            #2 -> MemberSelector(Selector=Item3)
            -> MulticastSubject Motor3_Position => #8
            #2 -> MemberSelector(Selector=Item4)
            -> MulticastSubject Motor4_Position => #10
            #2 -> MemberSelector(Selector=Item5)
            -> MulticastSubject Motor5_Position => #12
            #4, #6, #8, #10, #12 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6 -> Condition False? => #10
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9, #10 -> Merge
        -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow LogControllerLogic
        SubscribeSubject MouseIDSet => #0
        SubscribeSubject MouseID => #1
        SubscribeSubject trainingStageStr => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #7
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=RootPath) => #9
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.DatasetName) => #11
        #9, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "\\" + Item2
        -> PropertyMapping(Path) => #14
        #7, #14 -> IncludeWorkflow(Path=OpenRigs.Logging:LogController.bonsai, SubjectId=GN014, SessionId="Stage 4", Path=C:\data\AV_Dome)
        -> DelaySubscription(DueTime=PT1S) => #16
        SubscribeSubject MouseIDSet => #17
        #16, #17 -> SubscribeWhen
        -> WorkflowOutput

    SubscribeSubject PathPrefix
    -> SelectMany SessionLogs
      Description: Starts every session log once LogControllerLogic publishes PathPrefix. Subjects that already hold a value (BehaviorSubject, AsyncSubject) hand it to the late subscriber. Values set at startup, such as the Zapit startup replies and the first trial draw, are therefore logged at the Set Mouse ID time instead of failing their CsvWriter. Add new loggers inside this group.
      Workflow
        GroupWorkflow TrialParameters
            SubscribeSubject ResponseData => #0
            SubscribeSubject thisTrialData => #1
            #0, #1 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                    Item1.CorrectResponse as correctResponse,
                    Item1.Response as response,
                    Item1.TrialCnt as TrialCnt,
                    Item2.trialType as trialType,
                    Item2.RewardProbability as RewardProbability,
                    Item2.IsRewarded as IsRewarded,
                    Item2.IsRepeat as IsRepeat,
                    Item2.RepeatCount as RepeatCount,
                    Item2.targetSide as targetSide,
                    Item2.ITI as ITI,
                    Item2.Quiescent as Quiescent,
                    Item2.rngSeedUsed as rngSeedUsed,
                    Item2.autoRewardProbability as autoRewardProbability,
                    Item2.autoReward as autoReward,
                    Item2.largeReward as largeReward,
                    Item2.RewardSizeInUl as RewardSizeInUl,
                    Item2.BothSpouts as BothSpouts,
                    Item2.visualAzimuth as visualAzimuth,
                    Item2.visualContrast as visualContrast,
                    Item2.visualPhase as visualPhase,
                    Item2.audioAzimuth as audioAzimuth,
                    Item2.OptogeneticEnabled as OptogeneticEnabled,
                    Item2.OptogeneticCondition as OptogeneticCondition,
                    Item2.OptogeneticDelay as OptogeneticDelay,
                    Item2.OptogeneticDuration as OptogeneticDuration,
                    Item2.OptogeneticPower as OptogeneticPower,
                    Item2.IncorrectTimeoutDuration as IncorrectTimeoutDuration,
                    Item2.LargeRewardMultiplier as LargeRewardMultiplier,
                    Item2.LargeRewardProbability as LargeRewardProbability,
                    Item2.BothSpoutsProbability as BothSpoutsProbability,
                    Item2.openLoopDuration as openLoopDuration,
                    Item2.closedLoopDuration as closedLoopDuration,
                    Item2.visualElevation as visualElevation,
                    Item2.visualGaussianWindowSigma as visualGaussianWindowSigma,
                    Item2.visualOrientation as visualOrientation,
                    Item2.visualSpatialFrequency as visualSpatialFrequency,
                    Item2.visualTemporalFrequency as visualTemporalFrequency,
                    Item2.visualFlickerFrequency as visualFlickerFrequency,
                    Item2.audioElevation as audioElevation,
                    Item2.audioFlickerFrequency as audioFlickerFrequency)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=TrialSettings, Selector="", Extension=csv)
            -> WorkflowOutput

        GroupWorkflow BehaviorBoard
            SubscribeSubject BehaviorEvents
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> GroupWorkflow ExcludeAnalogDataMaybe
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
                -> BooleanProperty(Value=false) => #2
                #0, #2 -> WithLatestFrom => #3
                -> Condition Flagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
                #3 -> Condition NotFlagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #8
                #6, #8 -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=BehaviorBoard)

        GroupWorkflow Cameras
            SubscribeSubject PathPrefix
            -> SelectMany
                SubscribeSubject FrameEvents1
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera1) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera1.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera1) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera1.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=false
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                SubscribeSubject FrameEvents2
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera2) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera2.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera2) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera2.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=true
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

                SubscribeSubject FrameEvents3
                -> Skip(Count=1)
                -> GroupWorkflow LogVideo
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name) => #1
                    -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera3) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=csv)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #3
                    #0, #3 -> Sink CsvWriter
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Seconds) => #1
                        #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #2
                        #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #3
                        #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #4
                        #1, #2, #3, #4 -> Zip
                        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                          Expression:
                            new(
                            Item1 as Seconds,
                            Item2 as Timestamp,
                            Item3 as FrameID,
                            Item4 as ExposureTime)
                        ExternalizedMapping(FileName) => #7
                        #6, #7 -> Bonsai.IO.CsvWriter
                          FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera3.csv"
                          Append=false
                          Overwrite=true
                          Suffix=None
                          IncludeHeader=true
                          Selector=""
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Value.Image) => #5
                    #1 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                        SubscribeSubject PathPrefix => #0
                        StringProperty(Value=Cameras) => #1
                        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                        -> StringProperty(Value=VideoData_Camera3) => #3
                        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                        -> StringProperty(Value=avi)
                        -> Take(Count=1) => #6
                        #0, #1, #3, #6 -> Zip
                        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                        -> WorkflowOutput
                    -> PropertyMapping(FileName) => #7
                    ExternalizedMapping(FrameRate) => #8
                    #5, #7, #8 -> Bonsai.Vision.VideoWriter
                      FileName="C:\data\AV_Dome\sub-GN014\ses-Stage 4_date-2026-10-28T15-25-48\Cameras\VideoData_Camera3.avi"
                      Suffix=None
                      Buffered=true
                      Overwrite=true
                      FourCC=FMP4
                      FrameRate=50
                      FrameSize(Width=0, Height=0)
                      ResizeInterpolation=NearestNeighbor
                    -> WorkflowOutput

        Disable GroupWorkflow Audio
            SubscribeSubject AudioTrigger
            -> StringProperty(Value=AudioTrigger)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName="", Selector=Seconds, Extension=csv)
            -> WorkflowOutput

        GroupWorkflow LicketySplit
            SubscribeSubject LickEventsLeft
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplitLeft)

            SubscribeSubject LickEventsRight
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplitRight)

        SubscribeSubject ClockSynchronizerEvents
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=TimestampGenerator)

        SubscribeSubject StartSession
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=SessionState, Selector="Seconds,Value", Extension=csv)

        SubscribeSubject RigConfigs
        -> UclOpenAvDome.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow RigSchema(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskConfig
        -> UclOpenAvDomeTask.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow TaskSchema(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        GroupWorkflow ZapitReplies
          Description: Harp-timestamped log of every Zapit reply: the presented condition and laser state per StartStimulus, plus the last startup query reply (GetNumConditions), handed over by the ZapitReplies BehaviorSubject when SessionLogs starts.
          Workflow
            SubscribeSubject ZapitReplies
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                                CommandCode as command,
                                Value as value,
                                LaserOn as laserOn,
                                IsError as isError,
                                ServerDatenum as serverDatenum)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=Zapit, Selector="", Extension=csv)
            -> WorkflowOutput

        GroupWorkflow StimulusTriggerLogs(Description="Harp-timestamped CSV log of the auditory/stimulus-presentation trigger (StartAuditoryStimulus).")
            SubscribeSubject StartAuditoryStimulus
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=StimulusStartEvents, Selector="Seconds,Value", Extension=csv)

            SubscribeSubject DecisionVariable
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=DecisionVariable, Selector="Seconds,Value", Extension=csv)

            SubscribeSubject visualAzimuth
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=VisualAzimuth, Selector="Seconds,Value", Extension=csv)

    SubscribeSubject RewardLineLeft
    -> Condition Calibrated?
        WorkflowInput Source1
        -> MemberSelector(Selector=Calibrated)
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO1(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardLineRight
    -> Condition Calibrated?
        WorkflowInput Source1
        -> MemberSelector(Selector=Calibrated)
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO2(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardDelivered
    -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow
      Path=OpenRigs.Logging:LogData.bonsai
      LogName=RewardDelivery
      Selector="Seconds,Value.Line,Value.RequestedUl,Value.DeliveredUl,Value.Count,Value.VolumePerPulseUl,Value.Calibrated,Value.Clamped"

SubscribeSubject ResponseData
-> SelectMany RedefineTrialData
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject source

    SubscribeSubject source => #3
    ExternalizedMapping(SeedOffset) => #4
    #3, #4 -> SelectMany RedefineTrial
        SubscribeSubject TaskConfig => #0
        Annotation "Without, WasCorrect doesn't get updated"(Text="Without, WasCorrect doesn't get updated") => #1
        #0, #1 -> Delay(DueTime=PT0.1S) => #2
        ExternalizedMapping(SeedOffset) => #3
        Defer "Get training stage"
            WorkflowInput Source1

            SubscribeSubject trainingStageStr => #1
            -> Condition "Stage 0?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 0") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=0) => #3
            #1 -> Condition "Stage 1?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 1") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            #1 -> Condition "Stage 2?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 2") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=2) => #7
            #1 -> Condition "Stage 3?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 3") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=3) => #9
            #1 -> Condition "Stage 4?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 4") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=4) => #11
            #1 -> Condition "Stage 5?"
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value)
                -> StringProperty(Value="Stage 5") => #2
                #0, #2 -> Zip
                -> Equal
                -> WorkflowOutput
            -> IntProperty(Value=5) => #13
            #3, #5, #7, #9, #11, #13 -> Merge
            -> WorkflowOutput
        -> PropertyMapping(trainingStageId) => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=CorrectResponse) => #7
        -> Equal(Operand=StringProperty(Value=Correct)) => #8
        #7 -> Equal(Operand=StringProperty(Value=AutoRewarded)) => #9
        #8, #9 -> Zip
        -> BitwiseOr
        -> PropertyMapping(WasCorrect) => #12
        #7 -> Equal(Operand=StringProperty(Value=NoResponse))
        -> PropertyMapping(WasTimeout) => #14
        SubscribeSubject TrialCount
        -> PropertyMapping(TrialNumber) => #16
        #2, #3, #5, #12, #14, #16 -> InitialiseTrial(trainingStageId=4, TrialType=-1, WasCorrect=false, WasTimeout=true, SeedOffset=1, TrialNumber=344) => #17
        -> WorkflowOutput
        #17 -> MemberSelector(Selector=trialType)
        #17 -> MemberSelector(Selector=targetSide)
        #17 -> MemberSelector(Selector=visualContrast)
    -> Take(Count=1) => #6
    -> WorkflowOutput
    #6 -> MemberSelector(Selector=trialType)
-> MulticastSubject thisTrialData

SubscribeSubject thisTrialData
-> SelectMany SetTrialVars
    WorkflowInput Source1
    -> MemberSelector(Selector=visualAzimuth) => #1
    -> MulticastSubject visualAzimuthStart
    #1 -> MulticastSubject visualAzimuth

    IntProperty(Value=0)
    -> MulticastSubject DecisionVariable

SubscribeSubject thisTrialData
-> SelectMany ArmZapit => #13
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settings => #2
    Disable SubscribeSubject ZapitReplies
    -> Disable Skip(Count=1)
    -> Disable Condition ArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.")
        WorkflowInput Source1
        -> Take(Count=1) => #1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: It.CommandCode == 1 && !It.IsError
        -> WorkflowOutput
        #1 -> MemberSelector(Selector=IsError)
        #1 -> MemberSelector(Selector=CommandCode)
    -> Disable Condition GerionsHackArmedForTtl?(Description="Passes a StartStimulus reply only when Zapit reported success and this rig uses the hardware trigger.") => #6
        WorkflowInput Source1
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !It.IsError
        -> WorkflowOutput
    Disable SubscribeSubject settings => #7
    #6, #7 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: !OptogeneticEnabled
    -> Disable Take(Count=1) => #11
    SubscribeSubject settings => #12
    -> Condition OptoTrial? => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=OptogeneticEnabled)
        -> WorkflowOutput
    SubscribeSubject settings
    -> PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #15
    SubscribeSubject RigConfigs
    -> PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #17
    #13, #15, #17 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
    -> MulticastSubject ZapitCommands
    -> BooleanProperty(Value=false) => #20
    #12 -> Condition NotOptoTrial?
        WorkflowInput Source1
        -> MemberSelector(Selector=OptogeneticEnabled)
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #22
    #20, #22 -> Merge => #23
    #2, #11, #23 -> Sample
    -> WorkflowOutput

    Disable Timer(DueTime=PT10S)
    -> Disable StringProperty(Value="Zapit did not reply in time (10s)")
    -> Disable ThrowError
Annotation NEEDED!(Text=NEEDED!) => #14
#13, #14 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.1)
-> SelectMany StartLaser
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settings => #2
    SubscribeSubject settings => #3
    SubscribeSubject RigConfigs => #4
    #3, #4 -> Zip
    -> Disable Condition HardwareTriggeredOptoTrial?
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> MemberSelector(Selector=OptogeneticEnabled) => #2
        #0 -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
        #2, #4 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2.Zapit.TriggerLine)
    -> MulticastSubject TriggerPulse => #8
    Disable SubscribeSubject settings
    -> Disable PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #10
    Disable SubscribeSubject RigConfigs
    -> Disable PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #12
    #8, #10, #12 -> Disable CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
    -> Disable MulticastSubject ZapitCommands => #14
    #2, #14 -> Sample
    -> WorkflowOutput
-> SelectMany "Present Spouts"
    WorkflowInput Source1 => #0
    SubscribeSubject thisTrialData
    -> MemberSelector(Selector=BothSpouts) => #2
    -> Condition True?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany SendSpoutINCommand => #4
        WorkflowInput Source1 => #0
        Annotation MoveToOutPosition(Text=MoveToOutPosition)
        -> SubscribeSubject StepperPosition_BothIn
        -> MulticastSubject StepperPositionCommand => #3
        #0, #3 -> Sample
        -> WorkflowOutput
    #2 -> Condition False?
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany PresentTargetSpoutOnly => #6
        WorkflowInput Source1 => #0
        SubscribeSubject thisTrialData
        -> MemberSelector(Selector=targetSide) => #2
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand => #4
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #2 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand => #6
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        #4, #6 -> Merge => #7
        #0, #7 -> Sample
        -> WorkflowOutput
    #4, #6 -> Merge => #7
    #0, #7 -> Sample
    -> WorkflowOutput
-> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0.5)
-> Disable Zip
-> Disable MemberSelector(Selector=Item1)
-> SelectMany ExecuteTrial => #21
    WorkflowInput Source1
    -> AsyncSubject trial

    PublishSubject<System.String> StopStimuli

    SubscribeSubject trial
    -> SelectMany StimuliPresentation
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settings

        Annotation "Auditory Stimulus"(Text="Auditory Stimulus")
        -> SubscribeSubject settings
        -> SelectMany "Define Speaker location"
            SubscribeSubject thisTrialData
            -> MemberSelector(Selector=audioAzimuth)
            -> PropertyMapping(X) => #2
            Source2=#2 -> Bonsai.Shaders.CreateVector3(X=0, Y=15, Z=0) => #3
            SubscribeSubject SpeakerLocations
            -> PropertyMapping(Locations) => #5
            #3, #5 -> SpatialLookup(Locations(Vector3(X=-90, Y=15, Z=0), Vector3(X=90, Y=15, Z=0), Vector3(X=0, Y=15, Z=0)))
            -> MulticastSubject ActiveSoundChannels => #7
            WorkflowInput Source1 => #8
            #7, #8 -> Sample
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject StartAuditoryStimulus

        Annotation "Visual Stimulus"(Text="Visual Stimulus")
        -> SubscribeSubject settings
        -> SelectMany FlashingVisualStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject trialSettings

            SubscribeSubject DrawStimuli => #3
            Annotation 16Hz(Text=16Hz) => #4
            SubscribeSubject trialSettings
            -> MemberSelector(Selector=visualFlickerFrequency) => #6
            Annotation "Double freq for On/Off"(Text="Double freq for On/Off") => #7
            #6, #7 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 / (2 * it))
            -> PropertyMapping(Period) => #9
            #4, #9 -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.063S)
            -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2)) => #11
            #3, #11 -> WithLatestFrom => #12
            -> MemberSelector(Selector=Item1) => #13
            #12 -> MemberSelector(Selector=Item2) => #14
            Annotation "Makes it 8Hz"(Text="Makes it 8Hz") => #15
            #14, #15 -> Condition => #16
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> WorkflowOutput
            #13, #16 -> Sample => #17
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #18
            #17, #18 -> IncludeWorkflow => #19
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=0
              ColorG=0
              ColorB=0
              ColorA=1
            Annotation "Either Response or Timeout"(Text="Either Response or Timeout")
            -> SubscribeSubject StopStimuli => #21
            #19, #21 -> TakeUntil => #22
            Annotation "GratingSettings from Schema"(Text="GratingSettings from Schema")
            -> SubscribeSubject trialSettings
            -> PropertyMapping => #25
              Contrast(Selector=visualContrast)
              LocationY(Selector=visualElevation)
              TemporalFrequency(Selector=visualTemporalFrequency)
              SpatialFrequency(Selector=visualSpatialFrequency)
              Angle(Selector=visualOrientation)
              Phase(Selector=visualPhase)
            Annotation "Extend in deg"(Text="Extend in deg")
            -> Annotation "Large enough so you dont see any edges"(Text="Large enough so you dont see any edges")
            -> Annotation "100 makes rel. numbers below easier!"(Text="100 makes rel. numbers below easier!")
            -> FloatProperty(Value=100) => #29
            -> PropertyMapping(ExtentX(Selector=it), ExtentY(Selector=it)) => #30
            Disable Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg")
            -> Disable FloatProperty(Value=9) => #32
            SubscribeSubject trialSettings => #33
            Annotation "GaussianWindowSigma in deg"(Text="GaussianWindowSigma in deg") => #34
            #33, #34 -> MemberSelector(Selector=visualGaussianWindowSigma) => #35
            #32, #35 -> Multiply(Operand=FloatProperty(Value=2)) => #36
            #36, #29 -> Zip => #37
            Annotation RelativeSigma(Text=RelativeSigma) => #38
            #37, #38 -> Divide
            -> PropertyMapping(Aperture(Selector=it)) => #40
            Annotation "Norm. 1: full size of ExtentX/Y"(Text="Norm. 1: full size of ExtentX/Y")
            -> FloatProperty(Value=1)
            -> PropertyMapping(Radius) => #43
            SubscribeSubject visualAzimuth
            -> PropertyMapping(LocationX) => #45
            #17, #25, #30, #40, #43, #45 -> IncludeWorkflow => #46
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=100
              ExtentY=100
              SpatialFrequency=0.06666667
              TemporalFrequency=0
              Phase=298.032227
              Angle=0
              SquareWave=false
              Contrast=0
              DutyCycle=nil
              Radius=1
              Aperture=0.4
              Opacity=1
            #46, #21 -> TakeUntil => #47
            #14 -> Condition Not => #48
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<System.Int64>(Value=0))
                -> BitwiseNot
                -> WorkflowOutput
            #3, #48 -> Sample => #49
            Annotation PhotodiodeIndicator(Text=PhotodiodeIndicator) => #50
            #49, #50 -> IncludeWorkflow => #51
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=30
              ExtentY=30
              LocationX=130
              LocationY=-22.5
              Layer=0
              Angle=0
              ColorR=1
              ColorG=1
              ColorB=1
              ColorA=1
            #51, #21 -> TakeUntil => #52
            #22, #47, #52 -> Zip
            -> WorkflowOutput

            StringProperty(Value=Done)
            -> MulticastSubject StopStimuli => #56
            Bonsai.Shaders.Timer(DueTime=PT1.5S) => #57
            #56, #57 -> SubscribeWhen

        Disable SubscribeSubject settings => #11
        Disable SubscribeSubject RigConfigs => #12
        #11, #12 -> Disable Zip
        -> Disable Condition HardwareTriggeredOptoTrial?
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=OptogeneticEnabled) => #2
            #0 -> MemberSelector(Selector=Item2)
            -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
            #2, #4 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> Disable MemberSelector(Selector=Item2.Zapit.TriggerLine)
        -> Disable MulticastSubject TriggerPulse => #16
        Disable SubscribeSubject settings
        -> Disable PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), StimDuration(Selector=OptogeneticDuration), StartDelay(Selector=OptogeneticDelay)) => #18
        Disable SubscribeSubject RigConfigs
        -> Disable PropertyMapping(HardwareTriggered(Selector=Zapit.HardwareTriggered)) => #20
        #16, #18, #20 -> Disable CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
        -> Disable MulticastSubject ZapitCommands
    -> PublishSubject StimuliFinished

    SubscribeSubject trial => #6
    SubscribeSubject trial
    -> MemberSelector(Selector=openLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> PropertyMapping(DueSeconds) => #10
    #6, #10 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=0)
    -> Disable SelectMany Response => #12
        SubscribeSubject LickStateLeft
        -> Take(Count=1) => #1
        SubscribeSubject trial => #2
        #1, #2 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Left)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Left) => #5
        SubscribeSubject LickStateRight
        -> Take(Count=1) => #7
        #7, #2 -> WithLatestFrom
        -> Condition "RegularTrial or Correct?"
            Disable WorkflowInput Source1
            -> Disable MemberSelector(Selector=Item2.autoReward)
            -> Disable BitwiseNot
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #4
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot => #6
            Annotation "Reward correct responses in AutoReward Trials"(Text="Reward correct responses in AutoReward Trials") => #7
            #7, #4 -> MemberSelector(Selector=Item2.targetSide)
            -> Equal(Operand=StringProperty(Value=Right)) => #9
            #6, #9 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> StringProperty(Value=Right) => #10
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S)
        -> Take(Count=1) => #13
        #13, #2 -> WithLatestFrom
        -> Condition RegularTrial?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.autoReward)
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #16
        SubscribeSubject trial
        -> MemberSelector(Selector=autoReward)
        -> Take(Count=1) => #19
        #13, #19 -> WithLatestFrom
        -> Condition AutoRewarded?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> StringProperty(Value=AutoRewarded) => #22
        #5, #10, #16, #22 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject trial => #13
    Annotation ResponseWindowInSec(Text=ResponseWindowInSec) => #14
    #13, #14 -> MemberSelector(Selector=closedLoopDuration)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it
    -> PropertyMapping(DueSeconds) => #17
    #12, #17 -> SelectMany ResponseNew => #18
        SubscribeSubject LickStateLeft
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject LickStateRight
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=-1) => #5
        #2, #5 -> Merge => #6
        SubscribeSubject DecisionVariable => #7
        #6, #7 -> WithLatestFrom
        -> Add
        -> MulticastSubject DecisionVariable => #10
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.Response.DegreesPerLick) => #12
        #10, #12 -> WithLatestFrom
        -> Multiply => #14
        SubscribeSubject visualAzimuthStart => #15
        #14, #15 -> WithLatestFrom
        -> Add
        -> MulticastSubject visualAzimuth
        SubscribeSubject trial => #19
        ExternalizedMapping(DueSeconds) => #20
        #19, #20 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=1.5)
        -> Take(Count=1)
        -> StringProperty(Value=NoResponse) => #23
        SubscribeSubject TaskConfig
        -> MemberSelector(Selector=TaskParameters.Response.ThresholdLicks) => #25
        #10, #25 -> WithLatestFrom => #26
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1 >= Item2
        -> Take(Count=1)
        -> StringProperty(Value=Left) => #29
        #26 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1 <= -Item2
        -> Take(Count=1)
        -> StringProperty(Value=Right) => #32
        #29, #32 -> Merge => #33
        #23, #33 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject TrialSuccess
    -> Disable MulticastSubject StopStimuli => #20
    Annotation Original(Text=Original) => #21
    #20, #21 -> Disable SelectMany ApplyConsequences
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #1
        WorkflowInput Source1 => #2
        #1, #2 -> WithLatestFrom => #3
        -> Condition NotAutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2") => #5
        -> Condition MISS
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse)
        -> SelectMany Timeout => #9
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
        #5 -> Condition NotMISS => #10
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition INCORRECT
            WorkflowInput Source1
            -> Equal
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany SendSpoutOutCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect)
        -> SelectMany Timeout => #14
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #2
            #0, #2 -> Sample
            -> Take(Count=1)
            -> WorkflowOutput

            Annotation(Text="TODO: add to trialDataSchemas")
        #10 -> Condition HIT
            WorkflowInput Source1
            -> Equal
            -> WorkflowOutput
        -> MulticastSubject RewardSide
        -> StringProperty(Value=Correct) => #17
        #3 -> Condition AutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1.Item2)
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1.Item1,Item2")
        -> MulticastSubject RewardSide
        -> StringProperty(Value=AutoRewarded) => #21
        #9, #14, #17, #21 -> Merge
        -> Take(Count=1) => #23
        Annotation "Give animal time to drink"(Text="Give animal time to drink") => #24
        #23, #24 -> Bonsai.Shaders.Delay(DueTime=PT1.5S)
        -> SelectMany SendSpoutOutCommand => #26
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_BothOut
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        Annotation "Needed to move here so deliver rewards still executes"(Text="Needed to move here so deliver rewards still executes") => #27
        #26, #27 -> SelectMany ITI
            WorkflowInput Source1 => #0
            SubscribeSubject trial => #1
            Annotation "Subtract extra time for spout movements and drinking"(Text="Subtract extra time for spout movements and drinking") => #2
            #1, #2 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(Math.Max(ITI-2.0, 0))
            -> PropertyMapping(DueTime) => #4
            #0, #4 -> Bonsai.Shaders.Delay(DueTime=PT0.947S)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ApplyConsequencesNew => #23
        WorkflowInput Source1 => #0
        SubscribeSubject trial
        -> MemberSelector(Selector="targetSide,autoReward") => #2
        #0, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
          Expression:
            new (Item1 as Response,
            Item2.Item1 as targetSide,
            Item2.Item2 as autoReward)
        -> Condition Correct?
            WorkflowInput Source1
            -> MemberSelector(Selector="Response,targetSide")
            -> Equal
            -> WorkflowOutput
        -> Sink RewardResponseSide
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> MulticastSubject RewardSide
            -> WorkflowOutput
        -> StringProperty(Value=Correct) => #7
        #4 -> Condition Incorrect? => #8
            WorkflowInput Source1
            -> MemberSelector(Selector="Response,targetSide")
            -> NotEqual
            -> WorkflowOutput
        -> Condition AutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=autoReward)
            -> WorkflowOutput
        -> Sink RewardResponseSide
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> MulticastSubject RewardSide
            -> WorkflowOutput
        -> StringProperty(Value=IncorrectAutoRewarded) => #11
        #7, #11 -> Merge => #12
        Annotation "Give animal time to drink"(Text="Give animal time to drink") => #13
        #12, #13 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2)
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai) => #15
        #8 -> Condition NotAutoReward?
            WorkflowInput Source1
            -> MemberSelector(Selector=autoReward)
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai)
        -> SelectMany PlayErrorSound
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.ErrorSound.Enabled)
            -> Take(Count=1)
            -> MulticastSubject StartAuditoryErrorSound
            -> WorkflowOutput
        -> StringProperty(Value=Incorrect) => #19
        #4 -> Condition Miss?
            WorkflowInput Source1
            -> MemberSelector(Selector=Response)
            -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\WithdrawSpouts.bonsai)
        -> StringProperty(Value=NoResponse) => #22
        #15, #19, #22 -> Merge => #23
        SubscribeSubject trial => #24
        #23, #24 -> WithLatestFrom
        -> SelectMany ITI
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Item1) => #4
            SubscribeSubject source
            -> MemberSelector(Selector=Item2.ITI)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it -0.1
            -> PropertyMapping(DueSeconds) => #8
            #4, #8 -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=4.75408554778159)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject TrialCount
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialCount => #27
    #23, #18, #27 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(it.Item1 as CorrectResponse,
            it.Item2 as Response,
            it.Item3 as TrialCnt)
    -> WorkflowOutput

    GroupWorkflow DeliverReward
        BehaviorSubject<System.String> RewardSide => #0
        -> Condition Left
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition Right
            WorkflowInput Source1
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=2) => #6
        #3, #6 -> Merge => #7
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Convert.ToDouble(it)
        #7, #10 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand

    Disable GroupWorkflow DeliverReward
        BehaviorSubject<System.Tuple(System.String,System.String)> RewardSide => #0
        -> Condition Left
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany SendSpoutLeftINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_LeftIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=1) => #3
        #0 -> Condition Right
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany SendSpoutRightINCommand
            WorkflowInput Source1 => #0
            Annotation MoveToOutPosition(Text=MoveToOutPosition)
            -> SubscribeSubject StepperPosition_RightIN
            -> MulticastSubject StepperPositionCommand => #3
            #0, #3 -> Sample
            -> WorkflowOutput
        -> IntProperty(Value=2) => #6
        #3, #6 -> Merge => #7
        SubscribeSubject trial
        -> MemberSelector(Selector=RewardSizeInUl)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
          Expression: Convert.ToDouble(Math.Ceiling(it / 2))
        #7, #10 -> WithLatestFrom
        -> SelectMany "Deliver Reward"
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject input

            SubscribeSubject input
            -> MemberSelector(Selector=Item1) => #4
            Annotation "Int determines which valve opens"(Text="Int determines which valve opens") => #5
            #4, #5 -> MulticastSubject TriggerPulse => #6
            SubscribeSubject RigConfigs => #7
            -> MemberSelector(Selector=BehaviorBoard.PulseController.PulseWidths.PulseDO1)
            -> Condition LeftValve? => #9
                WorkflowInput Source1

                SubscribeSubject input
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #7 -> MemberSelector(Selector=BehaviorBoard.PulseController.PulseWidths.PulseDO2)
            -> Condition RightValve? => #11
                WorkflowInput Source1

                SubscribeSubject input
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #9, #11 -> Merge
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(1 * 0.001 * it)
            -> PropertyMapping(DueTime) => #14
            #6, #14 -> Bonsai.Shaders.Delay(DueTime=PT0.04S) => #15
            SubscribeSubject input
            -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Count) => #18
            #15, #18 -> RepeatCount(Count=2)
            -> WorkflowOutput
        -> WorkflowOutput
Annotation => #22
  Text:
    Here we have the trial number and the reponse code.
    Things we want to do with this:

    1. Different outcomes depending on response,
            # Incorrect, then we have a timeout
            # Correct, valve trigger


    1. Track performance and visualise in the gui
            Track actual response (0/-1/1) of last 50 trials
            Running performance over 20 responsive trials (True/False)
#21, #22 -> BehaviorSubject ResponseData => #23
Annotation "This fires at declaration, so skip"(Text="This fires at declaration, so skip")
-> SubscribeSubject StartSession
-> Skip(Count=1)
-> Condition => #27
    WorkflowInput Source1
    -> WorkflowOutput
#23, #27 -> SubscribeWhen
-> TakeWhile
    SubscribeSubject StartSession
    -> WorkflowOutput
-> TakeLast(Count=1)
-> Repeat
